private function A_UserInput(  ) void ;
private function B_Arrays(  ) void ;
private function C_LabwareGeneration(  ) void ;
private function E_WorklistCrunching(  ) void ;
private function F_PipettingSteps(  ) void ;
private function _LoadInstructions(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function A_UserInput(  ) void {
  private dialog customDialog_1;
  private variable rtnValue;
  private dialog customDialog_2;
  private variable _intIndex_Bind;
  private variable _intIndex_Waste;
  private variable o_strLabware_Dilution;
  private variable o_strLabware_Dest;
  private variable _intIndex_Dilution;
  private variable _intIndex_Diluent;
  private variable _intIndex_Dest;
  private variable _blnBindVisible;
  private variable _rtnValue;
  private variable o_strLabware_Waste;
  private variable o_strLabware_Src;
  private variable _intIndex_Src;
  private variable o_strLabware_Bind;
  private variable o_arrPossibleLabware_Dest[];
  private variable o_arrPossibleLabware_Dilution[];
  private variable o_arrPossibleLabware_Src[];
  private variable o_arrPossibleLabware_Diluent[];
  private variable o_arrPossibleLabware_Bind[];
  private variable o_arrPossibleLabware_Waste[];
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  rtnValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  strWorklistFilePath = customDialog_1.GetCustomDialogProperty( "path1.Path" );
  if (rtnValue == 2)
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Path: "), strWorklistFilePath);
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Src.ItemsSource", o_arrPossibleLabware_Src );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Dilution.ItemsSource", o_arrPossibleLabware_Dilution );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Dest.ItemsSource", o_arrPossibleLabware_Dest );
  customDialog_2.SetCustomDialogArrayProperty( "comboBox_Diluent.ItemsSource", o_arrPossibleLabware_Diluent );
  customDialog_2.SetCustomDialogProperty( "comboBox_Src.SelectedIndex", _intIndex_Src );
  customDialog_2.SetCustomDialogProperty( "comboBox_Dilution.IsEnabled", _blnBindVisible );
  customDialog_2.SetCustomDialogProperty( "comboBox_Dilution.SelectedIndex", _intIndex_Dilution );
  customDialog_2.SetCustomDialogProperty( "comboBox_Dest.SelectedIndex", _intIndex_Dest );
  customDialog_2.SetCustomDialogProperty( "comboBox_Diluent.SelectedIndex", _intIndex_Diluent );
  customDialog_2.SetCustomDialogProperty( "image_Diluent.Source", o_strLabware_Waste );
  customDialog_2.SetCustomDialogProperty( "image_Dest.Source", o_strLabware_Dest );
  customDialog_2.SetCustomDialogProperty( "image_Dilution.Source", o_strLabware_Dilution );
  customDialog_2.SetCustomDialogProperty( "image_Dilution.IsVisible", _blnBindVisible );
  customDialog_2.SetCustomDialogProperty( "image_Src.Source", o_strLabware_Src );
  customDialog_2.ShowCustomDialog();
  _rtnValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  _intIndex_Src = customDialog_2.GetCustomDialogProperty( "comboBox_Src.SelectedIndex" );
  _intIndex_Dilution = customDialog_2.GetCustomDialogProperty( "comboBox_Dilution.SelectedIndex" );
  _intIndex_Dest = customDialog_2.GetCustomDialogProperty( "comboBox_Dest.SelectedIndex" );
  _intIndex_Diluent = customDialog_2.GetCustomDialogProperty( "comboBox_Diluent.SelectedIndex" );
  if (rtnValue == 2)
  {
    abort;
  }
}

private function _LoadInstructions(  ) void {
}

private function F_PipettingSteps(  ) void {
}

private function E_WorklistCrunching(  ) void {
}

private function B_Arrays(  ) void {
  private variable str;
  private variable arrSourceBarcodes[];
  private variable arrDestinationWells[];
  private variable arrVolumes_DIluent[];
  private variable arrVolumes_Sample[];
  private variable arrSourceWells[];
  private variable arrDestinationBarcodes[];
  private variable loopCounter1;
  private variable strWorklist_DestBC;
  private variable strWorklist_DestWell;
  private variable strWorklist_VolDil;
  private variable strWorklist_SrcWell;
  private variable strWorklist_SrcBC;
  private variable strWorklist_VolSam;
  private file hndWorklist;
  private variable arrDestinationBarcodes_Unique[];
  private variable arrSourceBarcodes_Unique[];
  private variable intMaxSourcePlateNumber;
  private variable intMaxDestinationPlateNumber;
  private variable __[];
  private variable arrVolume_Diluent[];
  intMaxSourcePlateNumber = 5;
  arrSourceBarcodes.SetSize(0);
  arrSourceWells.SetSize(0);
  arrDestinationBarcodes.SetSize(0);
  arrDestinationWells.SetSize(0);
  arrVolumes_Sample.SetSize(0);
  arrVolumes_DIluent.SetSize(0);
  hndWorklist.AddField("", strWorklist_SrcBC, hslString, 255);
  hndWorklist.AddField("", strWorklist_SrcWell, hslString, 255);
  hndWorklist.AddField("", strWorklist_DestBC, hslString, 255);
  hndWorklist.AddField("", strWorklist_DestWell, hslString, 255);
  hndWorklist.AddField("", strWorklist_VolSam, hslString, 255);
  hndWorklist.AddField("", strWorklist_VolDil, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strWorklistFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter1 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter1 = loopCounter1 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      WELL_FORMAT::A01_to_A1(strWorklist_SrcWell);
      WELL_FORMAT::A01_to_A1(strWorklist_DestWell);
      arrSourceBarcodes.AddAsLast(strWorklist_SrcBC);
      arrSourceWells.AddAsLast(strWorklist_SrcWell);
      arrDestinationBarcodes.AddAsLast(strWorklist_DestBC);
      arrDestinationWells.AddAsLast(strWorklist_DestWell);
      arrVolumes_Sample.AddAsLast(strWorklist_VolSam);
      arrVolumes_DIluent.AddAsLast(strWorklist_VolDil);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcBC: "), strWorklist_SrcBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcWell: "), strWorklist_SrcWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestBC: "), strWorklist_DestBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestWell: "), strWorklist_DestWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolSam: "), strWorklist_VolSam);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolDil: "), strWorklist_VolDil);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  TRACEARRAY::TraceArray(Translate("Full Worklist"), arrSourceBarcodes, arrSourceWells, arrDestinationBarcodes, arrDestinationWells, arrVolumes_Sample, arrVolume_Diluent, __, __, __, __, __, __, __, __, __, __);
  arrSourceBarcodes_Unique.SetSize(0);
  arrDestinationBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrSourceBarcodes, arrSourceBarcodes_Unique, 0);
  intNumberOfSourceBarcodes=arrSourceBarcodes_Unique.GetSize();
  if (intMaxSourcePlateNumber > intNumberOfSourceBarcodes)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many source plates for this method"), Translate(""));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of source plates: "), intNumberOfSourceBarcodes);
  UNIQUE_MEMBERS::Unique_members(arrDestinationBarcodes, arrDestinationBarcodes_Unique, 0);
  intNumberOfDestinationBarcodes=arrDestinationBarcodes_Unique.GetSize();
  if (intMaxDestinationPlateNumber > intNumberOfDestinationBarcodes)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many destination plates for this method"), Translate(""));
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Number of destination plates: "), intNumberOfDestinationBarcodes);
}

private function C_LabwareGeneration(  ) void {
  private variable strDestinationLabware_Prefix;
  private variable strSourceLabware_Prefix;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable arrDestinationLabwareIDs[];
  private variable arrSourceLabwareIDs[];
  private variable strDestinationLabware;
  private variable strSourceLabware;
  strSourceLabware_Prefix = Translate("");
  strDestinationLabware_Prefix = Translate("");
  arrSourceLabwareIDs.SetSize(0);
  arrDestinationLabwareIDs.SetSize(0);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfSourceBarcodes;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 < 10)
      {
        strSourceLabware = StrConcat4(strSourceLabware_Prefix, Translate("_000"), loopCounter1, Translate(""));
      }
      else
      {
        strSourceLabware = StrConcat4(strSourceLabware_Prefix, Translate("_00"), loopCounter1, Translate(""));
      }
      arrSourceLabwareIDs.AddAsLast(strSourceLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strSourceLabware: "), strSourceLabware);
    }
  }
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfDestinationBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (loopCounter2 < 10)
      {
        strDestinationLabware = StrConcat4(strDestinationLabware_Prefix, Translate("_000"), loopCounter2, Translate(""));
      }
      else
      {
        strDestinationLabware = StrConcat4(strDestinationLabware_Prefix, Translate("_00"), loopCounter2, Translate(""));
      }
      arrDestinationLabwareIDs.AddAsLast(strDestinationLabware);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strDestinationLabware: "), strDestinationLabware);
    }
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Source Labware"), arrSourceLabwareIDs);
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate("Destination Labware"), arrDestinationLabwareIDs);
}
